PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age (yrs)': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  color = -1.0000, -1.0000, -1.0000
  expName = experiment
  keyboardBackend = ioHub
  logging level = debug
  runMode = 0
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Routines
  Routine cover_story
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    TextboxComponent cover_story_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text = “Hello XYZ (say the name of the child)! Today, we will play a very interesting game in which there are two puppets! The puppets are the Lady Bird (flashes the character’s picture) and the Monkey (flashes the respective picture). They love playing hide-n-seek games with their toys. The Lady Bird always hides a toy and goes away. After she goes away, the Monkey comes up and tries to look for the toy. In the game, you will help the monkey in finding out where the toy is hidden.” 
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  Routine fam
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    TextboxComponent fam_text
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        We show the apple and kettle stimuli, and ask the child two questions:

        “[name of the participant], let’s try to guess the name of the object. What do you think was the object that the Monkey saw?”
        “How sure/certain are you that the object was (the name that the child took)?”
    CodeComponent assign_confidence_object
      Code Type = Py
      Begin Experiment:
        rep_number = 0
      Begin Routine:
        import pandas as pd

        # Convert trialList to a pandas DataFrame
        conditions = pd.DataFrame(fam_trial_loop.trialList)

        # Filter rows based on repetition
        if rep_number == 0:
            # First repetition: choose high-certainty objects (apple or cup)
            filtered_conditions = conditions[conditions['is_high_confidence_object'] == 1]
        #    print(f'Filtered Conditions 1: {filtered_conditions}')
        else:
            # Second repetition: choose low-certainty objects (nonsense1 or nonsense2)
            filtered_conditions = conditions[conditions['is_high_confidence_object'] == 0]
        #    print(f'Filtered Conditions 2: {filtered_conditions}')

        # Update the loop's trialList with the filtered conditions
        fam_trial_loop.trialList = filtered_conditions.to_dict('records')
        #print(f'Updated trial list: {fam_trial_loop.trialList}')

        print(f"Current video: {fam_trial_loop.thisTrial['fam_video_filename']}")

        # Increment repetition counter
        rep_number += 1
    MovieComponent fam_clip
      backend = ffpyplayer
      durationEstim = 25
      forceEndRoutine = True
      movie [set every repeat] = $fam_video_filename
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 3.0
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  Routine test
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  Routine thanks
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you for your attention and participation! :)
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Flow
  Routine cover_story
  LoopInitiator fam_trial_loop loopType="TrialHandler"
    conditionsFile = lists/fam_trials_list.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_apple.mov'), ('is_high_confidence_object', 1)]),
      OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_cup.mov'), ('is_high_confidence_object', 1)]),
      OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_nonsense1.mov'), ('is_high_confidence_object', 0)]),
      OrderedDict([('fam_video_filename', 'video_stimuli/FAM_videos/fam_nonsense2.mov'), ('is_high_confidence_object', 0)])]
    Routine fam
  LoopTerminator fam_trial_loop
  Routine thanks
